PsychoPy2experiment version="2024.1.1"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = helloworld
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    MouseComponent response_mouse
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      saveParamsClickable = mouse_position
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.5
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    UnknownPluginComponent noise_0 plugin="psychopy-visionscience"
      blendmode = add
      color = $[1,1,1]
      colorSpace = rgb
      contrast = .5
      filter = None
      imageComponent = Phase
      interpolate = nearest
      mask = None
      noiseBW = 1
      noiseBWO = 30
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.0625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = N-frames
      noiseNewSampleWhen = 1
      noiseOri = 0.0
      noiseType = White
      ori = 0
      phase = 0.0
      pos = (0, 0)
      sf = None
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = .5
      syncScreenRefresh = True
      texture resolution = 512
      units = from exp settings
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    UnknownPluginComponent noise plugin="psychopy-visionscience"
      blendmode = add
      color = $[1,1,1]
      colorSpace = rgb
      contrast = .5
      filter = None
      imageComponent = Phase
      interpolate = nearest
      mask = None
      noiseBW = 1
      noiseBWO = 30
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.0625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = N-frames
      noiseNewSampleWhen = 1
      noiseOri = 0.0
      noiseType = White
      ori = 0
      phase = 0.0
      pos = (0, 0)
      sf = None
      size = (1, 1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 15
      syncScreenRefresh = True
      texture resolution = 512
      units = from exp settings
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    GratingComponent blob_0
      blendmode = add
      contrast [set every repeat] = .5*blobHeight
      mask = gauss
      ori = 45
      phase = .25
      pos [set every frame] = (0,0)
      sf = 1
      size [set every repeat] = $blobWidth*np.ones((2,))
      startVal [time (s)] = 0
      stopVal [duration (s)] = .5
      tex [set every repeat] = $np.ones((512,512))
      texture resolution = 512
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    GratingComponent blob
      blendmode = add
      contrast [set every repeat] = .5*blobHeight
      mask = gauss
      ori = 45
      phase = .25
      pos [set every frame] = $blob.pos+sig*np.random.normal(size=(2,))
      sf = 1
      size [set every repeat] = $blobWidth*np.ones((2,))
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 15.0
      tex [set every repeat] = $np.ones((512,512))
      texture resolution = 512
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        blob.setPos((0,0))
        response_mouse.setPos((0,0))
        response_mouse.setVisible(0)
        blob.x = []
        blob.y = []
      Each Frame:
        if response_mouse.status == STARTED:
            x,y = blob.pos
            blob.x.append(x)
            blob.y.append(y)
      End Routine:
        trials.addData('blob.x', blob.x)
        trials.addData('blob.y', blob.y)
    PolygonComponent cursor
      fillColor = red
      lineColor = red
      pos [set every frame] = $response_mouse.getPos()
      shape = circle
      size = (0.005, 0.005)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.5
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  Routine Wait
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    TextComponent start_trial_text
      letterHeight = 0.04
      pos = (-0.3, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $"Press any button to continue"
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    MouseComponent start_trial_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = every frame
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Bonnen2015Conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('blobHeight', 1.0), ('blobWidth', 0.07), ('mask', '$np.ones((512,512))'), ('sig', 0.15)]),
      OrderedDict([('blobHeight', 0.5833), ('blobWidth', 0.12), ('mask', '$np.ones((512,512))'), ('sig', 0.15)]),
      OrderedDict([('blobHeight', 0.4118), ('blobWidth', 0.17), ('mask', '$np.ones((512,512))'), ('sig', 0.15)]),
      OrderedDict([('blobHeight', 0.3182), ('blobWidth', 0.22), ('mask', '$np.ones((512,512))'), ('sig', 0.15)])]
    Routine Wait
    Routine trial
  LoopTerminator trials
