PsychoPy2experiment version="2022.2.1"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = Bonnen2015_2afc
  keyboardBackend = ioHub
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Routines
  Routine trial
    NoiseStimComponent noise
      blendmode = add
      contrast = .5
      filter = None
      imageComponent = Phase
      interpolate = nearest
      noiseBW = 1
      noiseBWO = 30
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.0625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = N-frames
      noiseNewSampleWhen = 1
      noiseOri = 0.0
      noiseType = White
      sf = None
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = .75
      texture resolution = 512
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    NoiseStimComponent noise_2
      blendmode = add
      contrast = .5
      filter = None
      imageComponent = Phase
      interpolate = nearest
      noiseBW = 1
      noiseBWO = 30
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.0625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = Repeat
      noiseOri = 0.0
      noiseType = White
      sf = None
      size = (1, 1)
      startVal [time (s)] = .75
      texture resolution = 512
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    GratingComponent blob_1
      blendmode = add
      contrast [set every repeat] = .5*blobHeight
      mask = gauss
      ori = 45
      phase = .25
      pos [set every frame] = (0,0)
      sf = 1
      size [set every repeat] = $blobWidth*np.ones((2,))
      startVal [time (s)] = .1
      stopVal [duration (s)] = .25
      tex [set every repeat] = $np.ones((512,512))
      texture resolution = 512
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    GratingComponent blob_2
      blendmode = add
      contrast [set every repeat] = .5*blobHeight
      mask = gauss
      ori = 45
      phase = .25
      pos [set every frame] = (offset,0)
      sf = 1
      size [set every repeat] = $blobWidth*np.ones((2,))
      startVal [time (s)] = 0.45
      stopVal [duration (s)] = .25
      tex [set every repeat] = $np.ones((512,512))
      texture resolution = 512
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = .75
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  Routine Wait
    TextComponent start_trial_text
      letterHeight = 0.04
      pos = (-0.3, 0.25)
      startVal [time (s)] = 0.0
      text = $"Press left or right to continue"
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    KeyboardComponent start_key_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Wait
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Bonnen2015Conditions2AFC.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('blobHeight', 1.0), ('blobWidth', 0.07), ('offset', 0.0)]),
      OrderedDict([('blobHeight', 0.5833), ('blobWidth', 0.12), ('offset', 0.0)]),
      OrderedDict([('blobHeight', 0.4118), ('blobWidth', 0.17), ('offset', 0.0)]),
      OrderedDict([('blobHeight', 0.3182), ('blobWidth', 0.22), ('offset', 0.0)]),
      OrderedDict([('blobHeight', 1.0), ('blobWidth', 0.07), ('offset', 0.01)]),
      OrderedDict([('blobHeight', 0.5833), ('blobWidth', 0.12), ('offset', 0.01)]),
      OrderedDict([('blobHeight', 0.4118), ('blobWidth', 0.17), ('offset', 0.01)]),
      OrderedDict([('blobHeight', 0.3182), ('blobWidth', 0.22), ('offset', 0.01)]),
      OrderedDict([('blobHeight', 1.0), ('blobWidth', 0.07), ('offset', 0.02)]),
      OrderedDict([('blobHeight', 0.5833), ('blobWidth', 0.12), ('offset', 0.02)]),
      OrderedDict([('blobHeight', 0.4118), ('blobWidth', 0.17), ('offset', 0.02)]),
      OrderedDict([('blobHeight', 0.3182), ('blobWidth', 0.22), ('offset', 0.02)]),
      OrderedDict([('blobHeight', 1.0), ('blobWidth', 0.07), ('offset', 0.04)]),
      OrderedDict([('blobHeight', 0.5833), ('blobWidth', 0.12), ('offset', 0.04)]),
      OrderedDict([('blobHeight', 0.4118), ('blobWidth', 0.17), ('offset', 0.04)]),
      OrderedDict([('blobHeight', 0.3182), ('blobWidth', 0.22), ('offset', 0.04)]),
      OrderedDict([('blobHeight', 1.0), ('blobWidth', 0.07), ('offset', 0.08)]),
      OrderedDict([('blobHeight', 0.5833), ('blobWidth', 0.12), ('offset', 0.08)]),
      OrderedDict([('blobHeight', 0.4118), ('blobWidth', 0.17), ('offset', 0.08)])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
    Routine trial
  LoopTerminator trials
